PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = FINAL JERSILD
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent taskcue
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_cue
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    TextComponent numbertext
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $number
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    KeyboardComponent key_resp_2
      allowedKeys = 'o','e','l','g'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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  Routine instructions
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    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will classify numbers according to different rules.

        There are two types of tasks.

        TASK 1: ODD / EVEN

        If the number is ODD, press O.
        If the number is EVEN, press E.

        TASK 2: GREATER / LESS THAN 5

        If the number is GREATER than 5, press G.
        If the number is LESS than 5, press L.

        You should respond as quickly and accurately as possible.

        Please pay attention to the task shown before each number.

        Press SPACEBAR to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine thankyou
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you for participating!
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/zealshah/Downloads/jersild_condtions-2.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trial_no': 1.0, 'condition': 'Pure A', 'task': 'odd/even', 'number': 2.0, 'correct_key': 'e', 'task_cue': 'Is it EVEN?'},
      {'trial_no': 2.0, 'condition': 'Pure A', 'task': 'odd/even', 'number': 7.0, 'correct_key': 'o', 'task_cue': 'Is it ODD?'},
      {'trial_no': 3.0, 'condition': 'Pure A', 'task': 'odd/even', 'number': 4.0, 'correct_key': 'e', 'task_cue': 'Is it EVEN?'},
      {'trial_no': 4.0, 'condition': 'Pure A', 'task': 'odd/even', 'number': 9.0, 'correct_key': 'o', 'task_cue': 'Is it ODD?'},
      {'trial_no': 5.0, 'condition': 'Pure A', 'task': 'odd/even', 'number': 6.0, 'correct_key': 'e', 'task_cue': 'Is it EVEN?'},
      {'trial_no': 6.0, 'condition': 'Pure A', 'task': 'odd/even', 'number': 3.0, 'correct_key': 'o', 'task_cue': 'Is it ODD?'},
      {'trial_no': 7.0, 'condition': 'Pure A', 'task': 'odd/even', 'number': 8.0, 'correct_key': 'e', 'task_cue': 'Is it EVEN?'},
      {'trial_no': 8.0, 'condition': 'Pure A', 'task': 'odd/even', 'number': 5.0, 'correct_key': 'o', 'task_cue': 'Is it ODD?'},
      {'trial_no': 9.0, 'condition': 'Pure A', 'task': 'odd/even', 'number': 2.0, 'correct_key': 'e', 'task_cue': 'Is it EVEN?'},
      {'trial_no': 10.0, 'condition': 'Pure A', 'task': 'odd/even', 'number': 9.0, 'correct_key': 'o', 'task_cue': 'Is it ODD?'},
      {'trial_no': 11.0, 'condition': 'Mixed', 'task': 'odd/even', 'number': 2.0, 'correct_key': 'e', 'task_cue': 'Is it EVEN?'},
      {'trial_no': 12.0, 'condition': 'Mixed', 'task': 'greater/less than 5', 'number': 7.0, 'correct_key': 'l', 'task_cue': 'Is it > 5?'}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
    Routine fixation
    Routine trial
  LoopTerminator trials
  Routine thankyou
